OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "3"
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename => #2
  New channel names = ECG
-> 0xc67a01dc Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 2
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.5
Data=#3 -> Signal display "filter"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
