OpenViBE-Scenario
Comment
  chunk size: 2
Comment
  get ECG channel

0xc73e83ec GDF file reader
  Filename = ${__volatile_ScenarioDir}/../../../data/ecg.gdf
  Samples per buffer = 2
  Subtract physical minimum = False

0xc67a01dc Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
  0x8d21ff41 = ${__volatile_ScenarioDir}/config_acquisition_client_bitalino.conf
Input stream 1=#1.Signal stream -> Identity => #2
#2.Output stream 1 -> Channel Selector "3" => #3
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
Data=#3, Stimulations=#2.Output stream 2 -> Signal display "raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3 -> Temporal filter => #5
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
-> Signal Differential/Integral => #6
  Operation = Differential
  Order = 1
-> Simple DSP "x^2" => #7
  Equation = x*x
-> Time based epoching
  Epoch 1 duration (in sec) = 0.0625
  Epoch 1 intervals (in sec) = 0.0625
-> Signal average => #9
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#9 -> Signal display "average"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Data=#7 -> Signal display "power"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#7 -> Matrix Display "values"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#6 -> Signal display "differential"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#5 -> Signal display "filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
QRS threshold
  Clock frequency (Hz) = 64
  Script = ${__volatile_ScenarioDir}/python_control_GUI_mono.py
  Sampling frequency = 128
  Generated epoch sample count = 4
  min value = -10
  max value = 5000
  window title = QRS threshold
-> Time based epoching
  Epoch 1 duration (in sec) = 0.0625
  Epoch 1 intervals (in sec) = 0.0625
-> Signal average => #18
Input - A=#9, Input - B=#18 -> Simple DSP "if > max" => #19
  Equation = (a > b)
-> Matrix Display "trigger"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#19 -> Signal display "trigger"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#19 -> LSL Export (Gipsa)
  Stream name = ecg
  Stream type = tobe
