OpenViBE-Scenario

Keyboard stimulator
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
-> Stimulation Filter
  Default action = Select
  Time range begin = 0
  Time range end = 0
  Action to perform = Reject
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_00
-> 0xc67a01dc IBI / BPM => #2
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_IBI.py
  Sampling frequency = 128
  Generated epoch sample count = 32
  Min BPM = 50
  Max BPM = 200
  Max variation = 10
  Debug = true
-> Channel Selector "BPM" => #3
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
Data=#3 -> Signal display "BPM"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 240
  Vertical Offset = 120
  Time Scale = 60
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#2 -> Channel Selector "IBI" => #5
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
Data=#5 -> Signal display "IBI"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 3
  Vertical Offset = 0
  Time Scale = 60
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#2 -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#2 -> Signal display "IBI/BPM"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
