OpenViBE-Scenario
Comment
  auto threshold for beats
Comment
  chunk size: 2
Comment
  get ECG channel

0xc73e83ec GDF file reader
  Filename = ${__volatile_ScenarioDir}/../../../data/ecg.gdf
  Samples per buffer = 2
  Subtract physical minimum = False

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
  0x8d21ff41 = ${__volatile_ScenarioDir}/config_acquisition_client_bitalino.conf
Input stream 1=#1.Signal stream -> Identity => #2
#2.Output stream 1 -> Channel Selector "3" => #3
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
Data=#3, Stimulations=#2.Output stream 2 -> Signal display "raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3 -> Temporal filter => #5
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
-> Signal Differential/Integral => #6
  Operation = Differential
  Order = 1
-> Simple DSP "x^2" => #7
  Equation = x*x
-> Time based epoching
  Epoch 1 duration (in sec) = 0.250
  Epoch 1 intervals (in sec) = 0.125
-> Univariate Statistics => #9
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
Input - A=#9.Variance, Input - B=#9.Range -> Simple DSP "variance/range" => #10
  Equation = a/b
-> Simple DSP ">100" => #11
  Equation = (x>100)
-> 0xc73e83ec Matrix Display "trigger"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#11 -> Signal display "trigger"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#11 -> LSL Export (Gipsa)
  Stream name = ecg
  Stream type = tobe
#10 -> 0xc73e83ec Matrix Display "variance/range"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#7 -> 0xc73e83ec Signal display "power"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#7 -> 0xc73e83ec Matrix Display "values"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#6 -> 0xc73e83ec Signal display "differential"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#5 -> Signal display "filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
