OpenViBE-Scenario
Comment
  auto threshold for beats
Comment
  get ECG channel

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
  0x8d21ff41 = ${__volatile_ScenarioDir}/config_acquisition_client_bitalino.conf
Input stream 1=#0.Signal stream -> Identity => #1
#1.Output stream 1 -> Channel Selector "2" => #2
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
Data=#2, Stimulations=#1.Output stream 2 -> 0xc73e83ec Signal display "raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#2 -> Temporal filter => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
-> Signal Differential/Integral => #5
  Operation = Differential
  Order = 1
-> Simple DSP "x^2" => #6
  Equation = x*x
-> Time based epoching
  Epoch 1 duration (in sec) = 0.250
  Epoch 1 intervals (in sec) = 0.0625
-> Univariate Statistics => #8
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
Input - A=#8.Variance, Input - B=#8.Range -> Simple DSP "variance/range" => #9
  Equation = a/b
-> Matrix Display "variance/range"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#9 -> Simple DSP ">200" => #11
  Equation = (x>200)
-> Simple DSP
  Equation = x-0.5
-> Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 1
-> Stimulation Filter => #14
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
Data=#11, Stimulations=#14 -> Signal display "trigger"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#14 -> 0xc67a01dc IBI / BPM => #16
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_IBI.py
  Sampling frequency = 128
  Generated epoch sample count = 4
  Min BPM = 30
  Max BPM = 240
  Max variation = 15
  Debug = true
-> Matrix Display "IBI/BPM"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#16 -> Signal display "IBI/BPM"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 60
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#14 -> real IBI / BPM => #19
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_IBI.py
  Sampling frequency = 128
  Generated epoch sample count = 4
  Min BPM = 30
  Max BPM = 240
  Max variation = -1
  Debug = false
Data=#19 -> Signal display "real IBI/BPM"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 60
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#19 -> Matrix Display "real IBI/BPM"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#11 -> Matrix Display "trigger"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input signal=#11 -> LSL Export (Gipsa)
  Stream name = ecg
  Stream type = tobe
#6 -> Signal average => #24
Data=#24 -> Signal display "power"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#6 -> 0xc73e83ec Matrix Display "values"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#5 -> 0xc73e83ec Signal display "differential"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#4 -> Signal display "filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
