OpenViBE-Scenario
Comment
  Fatigue: increase in low alpha and theta, dicrease high frequencies
Comment
  higher weight for alpha activity, low idx == fatigue
  range: 0,00625 to 1

0xc67a01dc Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
  0x8d21ff41 = ${__volatile_ScenarioDir}/config_acquisition_client_openbci.conf
#0.Signal stream -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Common Average Reference
-> Channel Rename
  New channel names = O1;P7;F7;FP1;F8;T8;P8;O2
-> Identity => #4
-> Temporal filter "theta-alpha 4-10"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 10
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.25
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(x)
-> Spatial Filter "average channels" => #10
  Spatial Filter Coefficients = 0.125;0.125;0.125;0.125;0.125;0.125;0.125;0.125
  Number of Output Channels = 1
  Number of Input Channels = 8
-> 1-10 range => #11
  Crop method = Min/Max
  Min crop value = 1
  Max crop value = 10
Data=#11 -> Signal display "theta-alpha 4-10"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 10
  Vertical Offset = 10
  Time Scale = 60
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#10 -> Matrix Display "theta-alpha 4-10"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#4 -> Temporal filter "beta 15-20"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 15
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.25
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(x)
-> Spatial Filter "average channels" => #19
  Spatial Filter Coefficients = 0.125;0.125;0.125;0.125;0.125;0.125;0.125;0.125
  Number of Output Channels = 1
  Number of Input Channels = 8
-> 1-10 range => #20
  Crop method = Min/Max
  Min crop value = 1
  Max crop value = 10
Data=#20 -> Signal display "beta 15-20"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 10
  Vertical Offset = 10
  Time Scale = 60
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Input - A=#11, Input - B=#20 -> Simple DSP
  Equation = (b/a)
-> Epoch average => #23
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 20
-> 0-1 range => #24
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 1
Input signal=#24 -> LSL Export (Gipsa)
  Stream name = attention
  Stream type = tobe
Data=#24 -> Signal display "attention idx"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 1
  Vertical Offset = 0.5
  Time Scale = 60
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#23 -> Matrix Display "attention idx"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#19 -> Matrix Display "beta 15-20"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
