OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
  0x8d21ff41 = ${__volatile_ScenarioDir}/config_acquisition_client_openbci.conf
#0.Signal stream -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Common Average Reference
-> Channel Rename
  New channel names = O1;P7;F7;FP1;F8;T8;P8;O2
-> Identity
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 2
  High cut frequency (Hz) = 10
  Pass band ripple (dB) = 0.5
-> Channel Selector "F8" => #6
  Channel List = F8
  Action = Select
  Channel Matching Method = Smart
Data=#6 -> Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 20
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#6 -> Simple DSP
  Equation = abs(x)
-> Time based epoching
  Epoch 1 duration (in sec) = 0.25
  Epoch 1 intervals (in sec) = 0.25
-> Univariate Statistics => #10
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
Input - A=#10.Variance, Input - B=#10.Range -> Simple DSP "variance/range" => #11
  Equation = a/b
-> Simple DSP ">4" => #12
  Equation = (x>4)
Input signal=#12 -> LSL Export (Gipsa)
  Stream name = blinks
  Stream type = tobe
Data=#12 -> Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 2
  Vertical Offset = 0
  Time Scale = 60
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#11 -> 0xc67a01dc Matrix Display "variance/range"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
