OpenViBE-Scenario
Comment
  chunk size: 2
Comment
  get breath channel

GDF file reader => #0
  Filename = ${__volatile_ScenarioDir}/../../../data/breath.gdf
  Samples per buffer = 2
  Subtract physical minimum = False
Input stream 1=#0.EEG stream -> Identity => #1
#1.Output stream 1 -> Channel Selector "1" => #2
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch 1 duration (in sec) = 0.125
  Epoch 1 intervals (in sec) = 0.125
-> Signal average => #4
Data=#4 -> Signal display "average"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Input signal=#4 -> 0xc67a01dc LSL Export (Gipsa)
  Stream name = breath
  Stream type = tobe
Data=#2, Stimulations=#1.Output stream 2 -> Signal display "raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Acquisition client
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
