OpenViBE-Scenario
Comment
  chunk size: 2
Comment
  get breath channel

0xc73e83ec GDF file reader
  Filename = ${__volatile_ScenarioDir}/../../../data/breath.gdf
  Samples per buffer = 2
  Subtract physical minimum = False

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
  0x8d21ff41 = ${__volatile_ScenarioDir}/config_acquisition_client_bitalino.conf
Input stream 1=#1.Signal stream -> Identity => #2
#2.Output stream 1 -> Channel Selector "1" => #3
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching => #4
  Epoch 1 duration (in sec) = 0.125
  Epoch 1 intervals (in sec) = 0.125
-> Signal average => #5
Data=#5 -> Signal display "average"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Input signal=#5 -> LSL Export (Gipsa)
  Stream name = breath
  Stream type = tobe
#4 -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#3, Stimulations=#2.Output stream 2 -> Signal display "raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
