OpenViBE-Scenario
Comment
  get breath channel
Comment
  get ECG channel
Comment
  Have to set at least 0.5/0.5 time based epoching
  to sync the 250hz feed of openbci

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
  0x8d21ff41 = ${__volatile_ScenarioDir}/config_acquisition_client_bitalino.conf
Input stream 1=#0.Signal stream -> Identity => #1
#1.Output stream 1 -> Channel Selector "1" => #2
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch 1 duration (in sec) = 0.125
  Epoch 1 intervals (in sec) = 0.125
-> Signal average => #4
Input signal=#4 -> LSL Export (Gipsa)
  Stream name = breath
  Stream type = tobe
#2 -> Time based epoching "breath epochs"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.5
-> Signal average => #7
#1.Output stream 1 -> Channel Selector "2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #9
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
-> Signal Differential/Integral
  Operation = Differential
  Order = 1
-> Simple DSP "x^2"
  Equation = x*x
-> Time based epoching
  Epoch 1 duration (in sec) = 0.250
  Epoch 1 intervals (in sec) = 0.0625
-> Univariate Statistics => #13
  Mean = false
  Variance = true
  Range = true
  Median = false
  IQR = false
  Percentile = true
  Percentile value = 30
Input - A=#13.Variance, Input - B=#13.Range -> Simple DSP "variance/range"
  Equation = a/b
-> Simple DSP ">200" => #15
  Equation = (x>200)
-> Simple DSP
  Equation = x-0.5
-> Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 1
-> Stimulation Filter => #18
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
Data=#15, Stimulations=#18 -> Signal display "trigger"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#18 -> IBI / BPM => #20
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_IBI.py
  Sampling frequency = 128
  Generated epoch sample count = 1
  Min BPM = 30
  Max BPM = 240
  Max variation = 15
  Debug = false
-> Channel Selector "BPM"
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching "breath epochs"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.5
-> Signal average => #23
Input 1=#7, Input 2=#23 -> Signal Merger => #24
-> Time based epoching
  Epoch 1 duration (in sec) = 10
  Epoch 1 intervals (in sec) = 1
-> Connectivity Measure => #26
  Method = Magnitude Squared Coherence
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Hann
  Overlap (percentage) = 50
  Length of segments = 5
#26.Mean coherence signal -> Epoch average => #27
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 16
Data=#27 -> Signal display "connectivity smooth"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 100
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#27 -> Matrix Display "connectivity smooth"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#26.Mean coherence signal -> Matrix Display "connectivity"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#26.Mean coherence signal -> Signal display "connectivity"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 100
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#24 -> Signal display "test merge"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 120
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#20 -> Matrix Display "IBI/BPM"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#20 -> Signal display "IBI/BPM"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 60
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#15 -> LSL Export (Gipsa)
  Stream name = ecg
  Stream type = tobe
Data=#9 -> 0xc73e83ec Signal display "ECG filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

0xc73e83ec GDF file reader => #37
  Filename = test_coherence.gdf
  Samples per buffer = 4
  Subtract physical minimum = false
#37.Stimulations -> 0xc73e83ec Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Pause
