OpenViBE-Scenario
Comment
  How user should behave
Comment
  Have to set at least 0.5/0.5 time based epoching
  to sync the 250hz feed of openbci

0xc67a01dc sinus generator => #0
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_sinus_generator.py
  Sampling frequency = 250
  Generated epoch sample count = 2
  Sinus Frequency = 0.1
  Channel count = 1
Data=#0 -> Signal display "sinus"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#0 -> LSL Export (Gipsa)
  Stream name = breathing_target
  Stream type = tobe_2
LSL stim reader => #3
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_lsl_stims.py
  Stream type = Markers
  Stream name = XpTiming
  Get all streams = false
  debug = false
Signal=#0, Stimulation=#3 -> GDF file writer
  Filename = ${__volatile_ScenarioDir}/records/s2_target_-[$core{date}-$core{time}].gdf
Acquisition client => #5
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1026
  0x8d21ff41 = ${__volatile_ScenarioDir}/config_acquisition_client_openbci_2.conf
Input stimulations 1=#5.Stimulations, Input stimulations 2=#3 -> Stimulation multiplexer => #6
Signal=#5.Signal stream, Stimulation=#6 -> GDF file writer
  Filename = ${__volatile_ScenarioDir}/records/s2_openbci_-[$core{date}-$core{time}].gdf
Input stream 1=#5.Signal stream -> Identity => #8
#8.Output stream 1 -> Channel Selector "2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #10
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
-> Signal Differential/Integral
  Operation = Differential
  Order = 1
-> Simple DSP "x^2"
  Equation = x*x
-> Time based epoching
  Epoch 1 duration (in sec) = 0.250
  Epoch 1 intervals (in sec) = 0.0625
-> Univariate Statistics => #14
  Mean = false
  Variance = true
  Range = true
  Median = false
  IQR = false
  Percentile = true
  Percentile value = 30
Input - A=#14.Variance, Input - B=#14.Range -> Simple DSP "variance/range"
  Equation = a/b
-> Simple DSP ">200" => #16
  Equation = (x>200)
-> Simple DSP
  Equation = x-0.5
-> Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 1
-> Stimulation Filter => #19
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
Data=#16, Stimulations=#19 -> Signal display "trigger"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#19 -> IBI / BPM => #21
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_IBI.py
  Sampling frequency = 128
  Generated epoch sample count = 1
  Min BPM = 30
  Max BPM = 240
  Max variation = 20
  Debug = false
-> Channel Selector "BPM"
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching "breath epochs"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.5
-> Signal average => #24
#21 -> Channel Selector "beats" => #25
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
Input signal=#25 -> LSL Export (Gipsa)
  Stream name = ecg
  Stream type = tobe_2
#21 -> Matrix Display "IBI/BPM"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#21 -> Signal display "IBI/BPM"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 60
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stimulations 1=#3, Input stimulations 2=#19 -> Stimulation multiplexer => #29
Signal=#21, Stimulation=#29 -> GDF file writer
  Filename = ${__volatile_ScenarioDir}/records/s2_IBI_-[$core{date}-$core{time}].gdf
Data=#10 -> Signal display "ECG filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#8.Output stream 1 -> Channel Selector "1" => #32
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch 1 duration (in sec) = 0.125
  Epoch 1 intervals (in sec) = 0.125
-> Signal average => #34
Input signal=#34 -> LSL Export (Gipsa)
  Stream name = breath
  Stream type = tobe_2
#32 -> Time based epoching "breath epochs"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.5
-> Signal average => #37
Input 1=#37, Input 2=#24 -> Signal Merger => #38
-> Time based epoching
  Epoch 1 duration (in sec) = 10
  Epoch 1 intervals (in sec) = 1
-> Connectivity Measure => #40
  Method = Magnitude Squared Coherence
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Hann
  Overlap (percentage) = 50
  Length of segments = 5
#40.Mean coherence signal -> Epoch average => #41
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 16
Data=#41 -> Signal display "connectivity smooth"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 100
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#41 -> Matrix Display "connectivity smooth"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input signal=#41 -> LSL Export (Gipsa)
  Stream name = coherence
  Stream type = tobe_2
#40.Mean coherence signal -> Matrix Display "connectivity"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#40.Mean coherence signal -> Signal display "connectivity"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 100
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#40.Mean coherence signal, Stimulation=#3 -> GDF file writer
  Filename = ${__volatile_ScenarioDir}/records/s2_connectivity_-[$core{date}-$core{time}].gdf
Data=#38 -> Signal display "test merge"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 120
  Bottom ruler = true
  Left ruler = false
  Multiview = false
