OpenViBE-Scenario
Comment
  Two pipelines, two subjects

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1025
  0x8d21ff41 = ${__volatile_ScenarioDir}/config_acquisition_client_openbci_2.conf
#0.Signal stream -> Channel Selector "2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
-> Signal Differential/Integral
  Operation = Differential
  Order = 1
-> Simple DSP "x^2"
  Equation = x*x
-> Time based epoching
  Epoch 1 duration (in sec) = 0.250
  Epoch 1 intervals (in sec) = 0.0625
-> Univariate Statistics => #6
  Mean = false
  Variance = true
  Range = true
  Median = false
  IQR = false
  Percentile = true
  Percentile value = 30
Input - A=#6.Variance, Input - B=#6.Range -> Simple DSP "variance/range"
  Equation = a/b
-> Simple DSP ">200"
  Equation = (x>200)
-> Simple DSP
  Equation = x-0.5
-> Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 1
-> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
-> IBI / BPM => #12
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_IBI.py
  Sampling frequency = 128
  Generated epoch sample count = 1
  Min BPM = 30
  Max BPM = 240
  Max variation = 20
  Debug = false
-> Channel Selector "BPM" => #13
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
#12 -> Matrix Display "S2 IBI/BPM"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#12 -> Signal display "S2 IBI/BPM"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 60
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Acquisition client => #16
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1025
  0x8d21ff41 = ${__volatile_ScenarioDir}/config_acquisition_client_openbci.conf
#16.Signal stream -> Channel Selector "2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
-> Signal Differential/Integral
  Operation = Differential
  Order = 1
-> Simple DSP "x^2"
  Equation = x*x
-> Time based epoching
  Epoch 1 duration (in sec) = 0.250
  Epoch 1 intervals (in sec) = 0.0625
-> Univariate Statistics => #22
  Mean = false
  Variance = true
  Range = true
  Median = false
  IQR = false
  Percentile = true
  Percentile value = 30
Input - A=#22.Variance, Input - B=#22.Range -> Simple DSP "variance/range"
  Equation = a/b
-> Simple DSP ">200"
  Equation = (x>200)
-> Simple DSP
  Equation = x-0.5
-> Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 1
-> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
-> IBI / BPM => #28
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_IBI.py
  Sampling frequency = 128
  Generated epoch sample count = 1
  Min BPM = 30
  Max BPM = 240
  Max variation = 20
  Debug = false
-> Channel Selector "BPM" => #29
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
Input 1=#29, Input 2=#13 -> Signal Merger
-> Time based epoching
  Epoch 1 duration (in sec) = 10
  Epoch 1 intervals (in sec) = 0.5
-> Connectivity Measure => #32
  Method = Magnitude Squared Coherence
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Hann
  Overlap (percentage) = 50
  Length of segments = 5
#32.Mean coherence signal -> Epoch average => #33
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 16
Data=#33 -> Signal display "connectivity smooth"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 100
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#33 -> Matrix Display "connectivity smooth"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input signal=#33 -> LSL Export (Gipsa)
  Stream name = sync
  Stream type = tobe
#32.Mean coherence signal -> Matrix Display "connectivity"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#32.Mean coherence signal -> Signal display "connectivity"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 100
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#28 -> Matrix Display "S1 IBI/BPM"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#28 -> Signal display "S1 IBI/BPM"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 60
  Bottom ruler = true
  Left ruler = false
  Multiview = false
0xc67a01dc LSL stim reader => #41
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_lsl_stims.py
  Stream type = Markers
  Stream name = XpTiming
  Get all streams = false
  debug = false
Signal=#32.Mean coherence signal, Stimulation=#41 -> GDF file writer
  Filename = ${__volatile_ScenarioDir}/records/s_sync_-[$core{date}-$core{time}].gdf
