OpenViBE-Scenario
Comment
  Vo out in channel 2 and 7b bias channel 4
Comment
  Rskin = [(Vcc - Vb)/(Vb - Vo) ] * R1

  Here Vcc=3v ; R1 = 1M
  conductance = 1/Rskin

  From Poh et al.
  A wearable sensor for unobtrusive, long-term assesment of
   electrodermal activity. IEEE Transactions on Biomedical
  Engineering

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
  0x8d21ff41 = ${__volatile_ScenarioDir}/config_acquisition_client_bitalino.conf
#0.Signal stream -> Time based epoching
  Epoch 1 duration (in sec) = 0.125
  Epoch 1 intervals (in sec) = 0.125
-> Signal average
-> Identity
-> Channel Selector "2;4"
  Channel List = 2;4
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename "Vout ; Vbias" => #5
  New channel names = Vout;Vbias
-> Channel Selector "Vout" => #6
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
#5 -> Channel Selector "Vbias" => #7
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
Input - A=#6, Input - B=#7 -> Simple DSP "true measures"
  Equation = ((b-a)/(3-b))/1000000
-> Channel Rename => #9
  New channel names = SkinConductance
-> Matrix Display "Skin conductance"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#9 -> Signal display "Skin conductance"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input - A=#6, Input - B=#7 -> Simple DSP
  Equation = abs(b-a)/1024
-> Channel Rename
  New channel names = SkinConductance
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.25
-> Signal average
-> Epoch average => #16
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 20
Input signal=#16 -> LSL Export (Gipsa)
  Stream name = eda
  Stream type = tobe
Data=#16 -> Signal display "arousal idx"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 1
  Vertical Offset = 0.5
  Time Scale = 60
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#16 -> Matrix Display "arousal idx"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#5 -> Matrix Display "raw"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#5 -> Signal display "raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
