OpenViBE-Scenario
Comment
  Level 1: longer period, log of power
Comment
  Level 2: shorter period, power

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1025
  0x8d21ff41 = ${__volatile_ScenarioDir}/config_acquisition_client_openbci.conf
#0.Signal stream -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Common Average Reference
-> Channel Rename => #3
  New channel names = O1;P7;F7;FP1;F8;T8;P8;O2
-> Temporal filter => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 2
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
Data=#4 -> Signal display "raw EEG"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3 -> Identity => #6
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 25
  High cut frequency (Hz) = 45
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.25
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(x)
-> Spatial Filter "average channels" => #12
  Spatial Filter Coefficients = 1;1;1;1;1;1;1;1
  Number of Output Channels = 1
  Number of Input Channels = 8
Data=#12 -> Signal display "muscle all log"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#6 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 25
  High cut frequency (Hz) = 45
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.25
-> Simple DSP
  Equation = x*x
-> Signal average
-> 0xc67a01dc Spatial Filter "average channels"
  Spatial Filter Coefficients = 0.125;0,125;0,125;0,125;0,125;0,125;0,125;0,125
  Number of Output Channels = 1
  Number of Input Channels = 8
-> Simple DSP => #19
  Equation = log(x)
-> Crop
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 10
-> Simple DSP => #21
  Equation = x/10
Input signal=#21 -> LSL Export (Gipsa)
  Stream name = noise
  Stream type = tobe
Data=#21 -> Signal display "muscle all"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 1
  Vertical Offset = 0.5
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input 1=#12, Input 2=#19 -> Signal Merger
-> Channel Rename
  New channel names = noise1;noise2
-> Matrix Display "muscle output"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
