OpenViBE-Scenario
Comment
  Meditation: connectivity
Comment
  Select frequency
Comment
  Set min (typically 0) and max
  (usually between 4 and 8)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1025
  0x8d21ff41 = ${__volatile_ScenarioDir}/config_acquisition_client_openbci.conf
#0.Signal stream -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Common Average Reference
-> Channel Rename
  New channel names = O1;P7;F7;FP1;F8;T8;P8;O2
-> Identity
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.5
-> Windowing functions
  Window method = Hamming
-> Spectral analysis => #7
  Spectral components = Imaginary part;Real part;Phase;Amplitude
#7.Real Part -> Frequency Band Selector => #8
  Frequencies to select = 7:28
#7.Imag Part -> Frequency Band Selector => #9
  Frequencies to select = 7:28
real part=#8, imaginary part=#9 -> IFFT box => #10
-> 0xc73e83ec hemi
  Method = Single-Trial Phase Locking Value
  Pairs of channels = F7-F8;P7-P8;O1-O2
  Channel Matching Method = Smart
-> 0xc73e83ec Channel Rename => #12
  New channel names = F;P;O
-> 0xc73e83ec Signal average
-> 0xc73e83ec Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#12 -> 0xc73e83ec Signal display "connectivity - hemi"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 1
  Vertical Offset = 0.5
  Time Scale = 60
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Data=#10 -> Signal display "IFFT"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#10 -> anterior-posterior => #17
  Method = Single-Trial Phase Locking Value
  Pairs of channels = FP1-O1;P7-F7;F8-P8
  Channel Matching Method = Smart
-> 0xc73e83ec Channel Rename => #18
  New channel names = 1;7;8
-> 0xc73e83ec Signal average
-> 0xc73e83ec Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#18 -> 0xc73e83ec Signal display "anterior-posterior"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 1
  Vertical Offset = 0.5
  Time Scale = 60
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#17 -> Spatial Filter
  Spatial Filter Coefficients = 0.33;0.33;0.33
  Number of Output Channels = 1
  Number of Input Channels = 3
-> Epoch average => #23
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 10
-> Matrix Display "relax idx"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input signal=#23 -> LSL Export (Gipsa)
  Stream name = relax
  Stream type = tobe
