OpenViBE-Scenario
Comment
  Valence: asymetry in alpha between lobes. More in left == positive
Comment
  NB: divide by 2 to have around 0.5 by default

0xc67a01dc Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
  0x8d21ff41 = ${__volatile_ScenarioDir}/config_acquisition_client_openbci.conf
#0.Signal stream -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Common Average Reference
-> Channel Rename
  New channel names = O1;P7;F7;FP1;F8;T8;P8;O2
-> Identity => #4
-> Channel Selector "O1;P7;F7"
  Channel List = O1;P7;F7
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "alpha 8-12"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.25
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(x)
-> Spatial Filter "average channels" => #11
  Spatial Filter Coefficients = 0.33;0.33;0.33
  Number of Output Channels = 1
  Number of Input Channels = 3
-> 1-10 range => #12
  Crop method = Min/Max
  Min crop value = 1
  Max crop value = 10
Data=#12 -> Signal display "alpha left"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 10
  Vertical Offset = 10
  Time Scale = 60
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#11 -> Matrix Display "alpha left"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#4 -> Channel Selector "F8;P8;O2"
  Channel List = F8;P8;O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "alpha 8-12"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.25
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(x)
-> Spatial Filter "average channels" => #21
  Spatial Filter Coefficients = 0.33;0.33;0.33
  Number of Output Channels = 1
  Number of Input Channels = 3
-> 1-10 range => #22
  Crop method = Min/Max
  Min crop value = 1
  Max crop value = 10
Data=#22 -> Signal display "alpha right"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 10
  Vertical Offset = 10
  Time Scale = 60
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Input - A=#12, Input - B=#22 -> Simple DSP => #24
  Equation = (a/b)/2
-> Matrix Display "valence idx"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#24 -> Epoch average
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 20
-> 0-1 range => #27
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 1
Input signal=#27 -> LSL Export (Gipsa)
  Stream name = valence
  Stream type = tobe
Data=#27 -> Signal display "valence idx"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 1
  Vertical Offset = 0.5
  Time Scale = 60
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#21 -> Matrix Display "alpha right"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
