OpenViBE-Scenario
Comment
  Workload: increase theta/delta in frontal, decrease alpha in occipital
Comment
  more weight on O1 and O2

0xc67a01dc Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
  0x8d21ff41 = ${__volatile_ScenarioDir}/config_acquisition_client_openbci.conf
#0.Signal stream -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Common Average Reference
-> Channel Rename
  New channel names = O1;P7;F7;FP1;F8;T8;P8;O2
-> Identity => #4
-> Channel Selector "F7;FP1;F8;T8"
  Channel List = F7;FP1;F8;T8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "delta-theta 1-8"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 8
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.25
-> Simple DSP
  Equation = x*x
-> Signal average
-> Spatial Filter
  Spatial Filter Coefficients = 0.25;0.25;0.25;0.25
  Number of Output Channels = 1
  Number of Input Channels = 4
-> Simple DSP => #11
  Equation = log(x)
-> Matrix Display "delta-theta"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#11 -> 1-10 range => #13
  Crop method = Min/Max
  Min crop value = 1
  Max crop value = 10
Data=#13 -> Signal display "delta-theta"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 10
  Vertical Offset = 10
  Time Scale = 60
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#4 -> Channel Selector "P8;O2;O1;P7"
  Channel List = P8;O2;O1;P7
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "alpha 8-14"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 14
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.25
-> Simple DSP
  Equation = x*x
-> Signal average
-> Spatial Filter
  Spatial Filter Coefficients = 0.15;0.3;0.3;0.15
  Number of Output Channels = 1
  Number of Input Channels = 4
-> Simple DSP => #21
  Equation = log(x)
-> Matrix Display "alpha"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#21 -> 1-10 range => #23
  Crop method = Min/Max
  Min crop value = 1
  Max crop value = 10
Data=#23 -> Signal display "alpha"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 10
  Vertical Offset = 10
  Time Scale = 60
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Input - A=#13, Input - B=#23 -> Simple DSP
  Equation = (a/b)/10
-> Epoch average => #26
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 20
Input signal=#26 -> LSL Export (Gipsa)
  Stream name = workload
  Stream type = tobe
#26 -> Matrix Display "workload idx"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#26 -> Signal display "workload idx"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 1
  Vertical Offset = 0.5
  Time Scale = 60
  Bottom ruler = true
  Left ruler = true
  Multiview = false
